PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u'1', u'reward': u'juice'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = knowledge_probe
  Screen = 1
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Routines
  Routine feedback_mag
    TextComponent feedback_txt_2
      color = black
      text [set every repeat] = $text2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine feedback
    TextComponent feedback_txt
      color = black
      text [set every repeat] = $text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine trial_2
  Routine trial
    PolygonComponent stim
      fillColor [set every repeat] = $color_left
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.5, 0.5)
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    RatingScaleComponent rating_prob
      labels = 0.25, 0.5, 0.75
      pos = 0, -0.4
      high = 3
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 1
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    TextComponent text_1
      color = black
      text = What is the probability of obtaining a reward when choosing this stimulus?
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    CodeComponent code
      Begin Routine:
        print n_edges_left
        stim.edges = n_edges_left
      End Routine:
        rating = rating_prob.getRating()
        print('original rating: %.2f' %rating)

        if rating == 1:
            rating = .25
        elif rating == 2:
            rating = .5
        elif rating == 3:
            rating = .75

        print('new rating: %.2f' %rating)

        if rating == prob1: # if coincides with left prob (the one we are using)
            text = "Correct!"
            #feedback_txt.setText("Correct!")
        else:
            #feedback_txt.setText("Incorrect")
            feedback_txt.setColor("red")
            text = "Incorrect!"
  Routine trial_mag
    PolygonComponent stim_2
      fillColor [set every repeat] = $color_left
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.5, 0.5)
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    RatingScaleComponent rating_mag
      labels = 1,2,3
      pos = 0, -0.6
      high = 3
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 1
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    TextComponent text_2
      color = black
      text = What is the amount of reward you will obtain if you are rewarded after having chosen this stimulus?
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    CodeComponent code_2
      Begin Routine:
        print n_edges_left
        stim.edges = n_edges_left
      End Routine:
        rating = rating_mag.getRating()
        print('original rating: %.2f' %rating)

        if rating == 1:
            rating = 1
        elif rating == 2:
            rating = 2
        elif rating == 3:
            rating = 3

        if rating == mag1: # if coincides with left prob (the one we are using)
            text2 = "Correct!"
            #feedback_txt.setText("Correct!")
        else:
            #feedback_txt.setText("Incorrect")
            feedback_txt_2.setColor("red")
            text2 = "Incorrect!"
  Routine stim_table
    PolygonComponent p1m1_img
      fillColor [set every repeat] = $p1
      pos = (-.5, 0.5)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.4, 0.4)
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    PolygonComponent p1m2_img
      fillColor [set every repeat] = $p1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.4, 0.4)
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    PolygonComponent p1m3_img
      fillColor [set every repeat] = $p1
      stopVal [duration (s)] = 90
      pos = (0.5, 0.5)
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.4, 0.4)
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    CodeComponent code_3
      Begin Routine:
        p1m1_img.edges = m1
        p1m2_img.edges = m2
        p1m3_img.edges = m3
        #p2m1_img.edges = m1
        #p2m2_img.edges = m2
        #p2m3_img.edges = m3
        #p3m1_img.edges = m1
        #p3m2_img.edges = m2
        #p3m3_img.edges = m3
Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions_probe.xlsx
    loopType = random
    nReps = 1
    conditions = [{'p2': u'Fuchsia', 'p3': u'DeepSkyBlue', 'p1': u'gold', 'm1': 4, 'm3': 3, 'm2': 90}]
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    Routine stim_table
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_juice.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'resp_img': u'stim/button_press.png', 'color': u'gold', 'mag2': 1, 'mag1': 2, 'n_edges_left': 90, 'aux2': 3.0, 'aux3': 1.0, 'aux1': 1.0, 'aux4': 2.0, 'resp_type': u'button', 'color_left': u'gold', 'aux_color': u'Fuchsia', 'prob': 0.25, 'trial_ID': 10, 'edges': 3.0, 'mag': 1.0, 'prob2': 0.25, 'prob1': 0.25, 'reward': u'juice ', 'color_right': u'gold', 'rand2': 0.6868691658608629, 'rand1': 0.24151560424288765, 'n_edges_right': 3},
      {'resp_img': u'stim/button_press.png', 'color': u'Fuchsia', 'mag2': 2, 'mag1': 2, 'n_edges_left': 90, 'aux2': 4.0, 'aux3': 2.0, 'aux1': 3.0, 'aux4': 1.0, 'resp_type': u'button', 'color_left': u'Fuchsia', 'aux_color': u'gold', 'prob': 0.5, 'trial_ID': 38, 'edges': 90.0, 'mag': 2.0, 'prob2': 0.25, 'prob1': 0.5, 'reward': u'juice ', 'color_right': u'gold', 'rand2': 0.3766651307469002, 'rand1': 0.9894255706204739, 'n_edges_right': 90},
      {'resp_img': u'stim/button_press.png', 'color': u'DeepSkyBlue', 'mag2': 2, 'mag1': 1, 'n_edges_left': 3, 'aux2': 90.0, 'aux3': 3.0, 'aux1': 2.0, 'aux4': 3.0, 'resp_type': u'button', 'color_left': u'gold', 'aux_color': u'DeepSkyBlue', 'prob': 0.75, 'trial_ID': 5, 'edges': 4.0, 'mag': 3.0, 'prob2': 0.5, 'prob1': 0.25, 'reward': u'juice ', 'color_right': u'Fuchsia', 'rand2': 0.9299650458249618, 'rand1': 0.5214706431211049, 'n_edges_right': 90},
      {'resp_img': u'stim/button_press.png', 'color': None, 'mag2': 3, 'mag1': 2, 'n_edges_left': 90, 'aux2': None, 'aux3': None, 'aux1': None, 'aux4': None, 'resp_type': u'button', 'color_left': u'DeepSkyBlue', 'aux_color': None, 'prob': None, 'trial_ID': 69, 'edges': None, 'mag': None, 'prob2': 0.5, 'prob1': 0.75, 'reward': u'juice ', 'color_right': u'Fuchsia', 'rand2': None, 'rand1': None, 'n_edges_right': 4}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
    Routine trial
    Routine feedback
    Routine trial_mag
    Routine feedback_mag
  LoopTerminator trials
